<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="saveFolder" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="clipDir" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFiles">
          <io:Path>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\Salvo\flir_cameras\M322_336\preprocessed\ORE_M322-336_Tilt_NoStim_R_4mm_7March2024\side_cam</io:Path>
          <io:SearchPattern>*.avi</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>ProcessVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\Salvo\flir_cameras\M322_336\preprocessed\ORE_M322-336_Tilt_NoStim_R_4mm_7March2024\side_cam\M335_R-03072024170102-0000.avi</cv:FileName>
                <cv:PlaybackRate>0</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>279</cv:X>
                  <cv:Y>431</cv:Y>
                  <cv:Width>69</cv:Width>
                  <cv:Height>109</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hls</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>11</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>125</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>179</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>200</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="saveFolder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\Salvo\flir_cameras\M322_336\preprocessed\ORE_M322-336_Tilt_NoStim_R_4mm_7March2024\LED_track</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>from System.IO import Path

@returns(str)
def process(value):
  a = value.Item1; #filename
  b = value.Item2 #path
  a = Path.GetFileNameWithoutExtension(a) + ".csv"
  c = Path.Combine(b, Path.GetFileName(a))
  print c
  return c</scr:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\Salvo\flir_cameras\M322_336\preprocessed\ORE_M322-336_Tilt_NoStim_R_4mm_7March2024\LED_track\M335_R-03072024170102-0000.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>FileName</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="17" Label="Source2" />
            <Edge From="10" To="13" Label="Source1" />
            <Edge From="10" To="14" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\Salvo\flir_cameras\M322_336\13March2024\side_cam\M323_L_pulses_1p5mW-03132024111020-0000.avi</cv:FileName>
            <cv:PlaybackRate>0</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>279</cv:X>
              <cv:Y>431</cv:Y>
              <cv:Width>69</cv:Width>
              <cv:Height>109</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:ConvertColor">
            <cv:Conversion>Bgr2Hls</cv:Conversion>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:HsvThreshold">
            <cv:Lower>
              <cv:Val0>11</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>125</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>179</cv:Val0>
              <cv:Val1>255</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea>200</cv:MinArea>
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Area</Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>