<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="saveFolder" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="clipDir" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFiles">
          <io:Path>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\yang\flir_cameras\Yang_experiment_Aug2023\subgroup_to_analyze\MIA_F\MIA_F_side</io:Path>
          <io:SearchPattern>*.avi</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>ProcessVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\yang\flir_cameras\Yang_experiment_Aug2023\subgroup_to_analyze\MIA_F\MIA_F_side\4mm_poly3_5_LL3_F-no-08232023151356-0000.avi</cv:FileName>
                <cv:PlaybackRate>0</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>119</cv:X>
                  <cv:Y>472</cv:Y>
                  <cv:Width>100</cv:Width>
                  <cv:Height>68</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Rgb2Gray</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>97</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>100</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="saveFolder" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\yang\flir_cameras\Yang_experiment_Aug2023\subgroup_to_analyze\MIA_F\Ridge_X</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>from System.IO import Path

@returns(str)
def process(value):
  a = value.Item1; #filename
  b = value.Item2 #path
  a = Path.GetFileNameWithoutExtension(a) + ".csv"
  c = Path.Combine(b, Path.GetFileName(a))
  print c
  return c</scr:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\yang\flir_cameras\Yang_experiment_Aug2023\subgroup_to_analyze\MIA_F\Ridge_X\4mm_poly3_5_LL3_F-no-08232023151356-0000.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>FileName</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="18" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="11" To="15" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FileCapture">
            <cv:FileName>R:\UusisaariU\PROCESSED_DATA_BACKUPS\nRIM_MEMBERS\Salvo\flir_cameras\M322_336\27March2024\side_cam\334_L_NoPulses_Tilt5d-03272024141322-0000.avi</cv:FileName>
            <cv:PlaybackRate>50</cv:PlaybackRate>
            <cv:StartPosition>0</cv:StartPosition>
            <cv:PositionUnits>Frames</cv:PositionUnits>
            <cv:Loop>true</cv:Loop>
            <cv:Playing>true</cv:Playing>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Crop">
            <cv:RegionOfInterest>
              <cv:X>119</cv:X>
              <cv:Y>472</cv:Y>
              <cv:Width>100</cv:Width>
              <cv:Height>68</cv:Height>
            </cv:RegionOfInterest>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:ConvertColor">
            <cv:Conversion>Rgb2Gray</cv:Conversion>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:HsvThreshold">
            <cv:Lower>
              <cv:Val0>0</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Lower>
            <cv:Upper>
              <cv:Val0>97</cv:Val0>
              <cv:Val1>0</cv:Val1>
              <cv:Val2>255</cv:Val2>
              <cv:Val3>0</cv:Val3>
            </cv:Upper>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:FindContours">
            <cv:Mode>External</cv:Mode>
            <cv:Method>ChainApproxNone</cv:Method>
            <cv:Offset>
              <cv:X>0</cv:X>
              <cv:Y>0</cv:Y>
            </cv:Offset>
            <cv:MinArea>100</cv:MinArea>
            <cv:MaxArea xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:BinaryRegionAnalysis" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:LargestBinaryRegion" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Centroid" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>X</Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>