<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>240</cv:X>
            <cv:Y>58</cv:Y>
            <cv:Width>292</cv:Width>
            <cv:Height>49</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Hsv2BgrFull</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>103</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>10</cv:Val0>
            <cv:Val1>25</cv:Val1>
            <cv:Val2>123</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>310</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>ServoAngle</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:ServoOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>9</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RandomDistribution</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Sample" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="FloatProperty">
          <Value>107.223541</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RandomDraw</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>MyArray</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ServoAngle</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ServoAngle</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContinuousUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>160</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RandomDistribution</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>100</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>110</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>110</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>90</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>MyArray</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="39" Label="Source3" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="39" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="39" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="39" Label="Source4" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source5" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>