<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:CreateSerialPort">
          <io:Name>myArduino</io:Name>
          <io:PortName>COM4</io:PortName>
          <io:BaudRate>9600</io:BaudRate>
          <io:Parity>None</io:Parity>
          <io:ParityReplace>63</io:ParityReplace>
          <io:DataBits>8</io:DataBits>
          <io:StopBits>One</io:StopBits>
          <io:Handshake>None</io:Handshake>
          <io:DiscardNull>false</io:DiscardNull>
          <io:DtrEnable>false</io:DtrEnable>
          <io:RtsEnable>false</io:RtsEnable>
          <io:ReadBufferSize>4096</io:ReadBufferSize>
          <io:WriteBufferSize>2048</io:WriteBufferSize>
          <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>220</cv:X>
            <cv:Y>156</cv:Y>
            <cv:Width>269</cv:Width>
            <cv:Height>78</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Hsv2RgbFull</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>54</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>1000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Tracking</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RandomDistribution</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Sample" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="FloatProperty">
          <Value>133.441086</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>myArduino</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContinuousUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>200</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RandomDistribution</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="15" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>